PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = foraging_expt_polygons_easy_AB
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p1_x, p1_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_2
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p2_x, p2_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_3
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p3_x, p3_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_4
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p4_x, p4_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_5
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p5_x, p5_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_6
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p6_x, p6_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_7
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p7_x, p7_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_8
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p8_x, p8_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_9
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p9_x, p9_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_10
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = [p10_x, p10_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_11
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p11_x, p11_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_12
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p12_x, p12_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_13
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p13_x, p13_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_14
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p14_x, p14_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_15
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p15_x, p15_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_16
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p16_x, p16_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_17
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p17_x, p17_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_18
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p18_x, p18_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_19
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p19_x, p19_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_20
      fillColor = lime
      lineColor = lime
      nVertices = 99
      pos [set every repeat] = [p20_x, p20_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_21
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p21_x, p21_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_22
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p22_x, p22_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_23
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p23_x, p23_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_24
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p24_x, p24_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_25
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p25_x, p25_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_26
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p26_x, p26_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_27
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p27_x, p27_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_28
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p28_x, p28_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_29
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p29_x, p29_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_30
      fillColor = blue
      lineColor = blue
      nVertices = 99
      pos [set every repeat] = [p30_x, p30_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_31
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p31_x, p31_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_32
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p32_x, p32_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_33
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p33_x, p33_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_34
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p34_x, p34_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_35
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p35_x, p35_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_36
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p36_x, p36_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_37
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p37_x, p37_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_38
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p38_x, p38_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_39
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p39_x, p39_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    PolygonComponent polygon_40
      fillColor = yellow
      lineColor = yellow
      nVertices = 99
      pos [set every repeat] = [p40_x, p40_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        points = 0
        myCount = 0
        distractorClick = 0
      Begin Routine:
        stimuli = [polygon, polygon_2, polygon_3, polygon_4, polygon_5, polygon_6, polygon_7, polygon_8, polygon_9, polygon_10,
        polygon_11, polygon_12, polygon_13, polygon_14, polygon_15, polygon_16, polygon_17, polygon_18, polygon_19, polygon_20,
        polygon_21, polygon_22, polygon_23, polygon_24, polygon_25, polygon_26, polygon_27, polygon_28, polygon_29, polygon_30,
        polygon_31, polygon_32, polygon_33, polygon_34, polygon_35, polygon_36, polygon_37, polygon_38, polygon_39, polygon_40]

        for clicked_shape in stimuli:
            thisOri = randint(0,360)
            clicked_shape.setOri(thisOri)
            x_jitter = np.random.uniform(-0.02, 0.02)
            y_jitter = np.random.uniform(-0.05, 0.05)
            clicked_shape.pos += (x_jitter, y_jitter)

        bufferTime=.3
        clickClock=core.Clock()
        lastClickTime = 0
        trial_points = 0
      Each Frame:
        for clicked_shape in stimuli:
            if mouse.isPressedIn(clicked_shape):
                thisClickTime = clickClock.getTime()
                if (thisClickTime - lastClickTime) > bufferTime:
                    if clicked_shape.fillColor[0] == 1 and clicked_shape.fillColor[1] == -1: # red
                        clicked_shape.color = 'grey'
                        points = points + 1
                        trial_points = trial_points + 1
                    elif clicked_shape.fillColor[1] == 1 and clicked_shape.fillColor[0] == -1: #lime
                        clicked_shape.color = 'grey'
                        points = points + 1
                        trial_points = trial_points + 1
                    else:
                        distractorClick = 1
                        continueRoutine = False # end current trial


                lastClickTime = thisClickTime

        if trial_points == 20:
            continueRoutine = False # collected everything!
      End Routine:
        if distractorClick == 1:
            myCount = myCount
        else:
            myCount = myCount + 1

        print(myCount)

        if myCount > 4:
            trials.finished = True

        event.clearEvents()

        polygon.color = [1, -1, -1]
        polygon_2.color = [1, -1, -1]
        polygon_3.color = [1, -1, -1]
        polygon_4.color = [1, -1, -1]
        polygon_5.color = [1, -1, -1]
        polygon_6.color = [1, -1, -1]
        polygon_7.color = [1, -1, -1]
        polygon_8.color = [1, -1, -1]
        polygon_9.color = [1, -1, -1]
        polygon_10.color = [1, -1, -1]
        polygon_11.color = [-1, 1, -1]
        polygon_12.color = [-1, 1, -1]
        polygon_13.color = [-1, 1, -1]
        polygon_14.color = [-1, 1, -1]
        polygon_15.color = [-1, 1, -1]
        polygon_16.color = [-1, 1, -1]
        polygon_17.color = [-1, 1, -1]
        polygon_18.color = [-1, 1, -1]
        polygon_19.color = [-1, 1, -1]
        polygon_20.color = [-1, 1, -1]
        polygon_21.color = [-1, -1, 1]
        polygon_22.color = [-1, -1, 1]
        polygon_23.color = [-1, -1, 1]
        polygon_24.color = [-1, -1, 1]
        polygon_25.color = [-1, -1, 1]
        polygon_26.color = [-1, -1, 1]
        polygon_27.color = [-1, -1, 1]
        polygon_28.color = [-1, -1, 1]
        polygon_29.color = [-1, -1, 1]
        polygon_30.color = [-1, -1, 1]
        polygon_31.color = [1, 1, -1]
        polygon_32.color = [1, 1, -1]
        polygon_33.color = [1, 1, -1]
        polygon_34.color = [1, 1, -1]
        polygon_35.color = [1, 1, -1]
        polygon_36.color = [1, 1, -1]
        polygon_37.color = [1, 1, -1]
        polygon_38.color = [1, 1, -1]
        polygon_39.color = [1, 1, -1]
        polygon_40.color = [1, 1, -1]

        distractorClick = 0

        thisExp.addData("p1", polygon.pos)
        thisExp.addData("p2", polygon_2.pos)
        thisExp.addData("p3", polygon_3.pos)
        thisExp.addData("p4", polygon_4.pos)
        thisExp.addData("p5", polygon_5.pos)
        thisExp.addData("p6", polygon_6.pos)
        thisExp.addData("p7", polygon_7.pos)
        thisExp.addData("p8", polygon_8.pos)
        thisExp.addData("p9", polygon_9.pos)
        thisExp.addData("p10", polygon_10.pos)
        thisExp.addData("p11", polygon_11.pos)
        thisExp.addData("p12", polygon_12.pos)
        thisExp.addData("p13", polygon_13.pos)
        thisExp.addData("p14", polygon_14.pos)
        thisExp.addData("p15", polygon_15.pos)
        thisExp.addData("p16", polygon_16.pos)
        thisExp.addData("p17", polygon_17.pos)
        thisExp.addData("p18", polygon_18.pos)
        thisExp.addData("p19", polygon_19.pos)
        thisExp.addData("p20", polygon_20.pos)
        thisExp.addData("p21", polygon_21.pos)
        thisExp.addData("p22", polygon_22.pos)
        thisExp.addData("p23", polygon_23.pos)
        thisExp.addData("p24", polygon_24.pos)
        thisExp.addData("p25", polygon_25.pos)
        thisExp.addData("p26", polygon_26.pos)
        thisExp.addData("p27", polygon_27.pos)
        thisExp.addData("p28", polygon_28.pos)
        thisExp.addData("p29", polygon_29.pos)
        thisExp.addData("p30", polygon_30.pos)
        thisExp.addData("p31", polygon_31.pos)
        thisExp.addData("p32", polygon_32.pos)
        thisExp.addData("p33", polygon_33.pos)
        thisExp.addData("p34", polygon_34.pos)
        thisExp.addData("p35", polygon_35.pos)
        thisExp.addData("p36", polygon_36.pos)
        thisExp.addData("p37", polygon_37.pos)
        thisExp.addData("p38", polygon_38.pos)
        thisExp.addData("p39", polygon_39.pos)
        thisExp.addData("p40", polygon_40.pos)
    MouseComponent mouse
      clickable = polygon, polygon_2, polygon_3, polygon_4, polygon_5, polygon_6, polygon_7, polygon_8, polygon_9, polygon_10, polygon_11, polygon_12, polygon_13, polygon_14, polygon_15, polygon_16, polygon_17, polygon_18, polygon_19, polygon_20, polygon_21, polygon_22, polygon_23, polygon_24, polygon_25, polygon_26, polygon_27, polygon_28, polygon_29, polygon_30, polygon_31, polygon_32, polygon_33, polygon_34, polygon_35, polygon_36, polygon_37, polygon_38, polygon_39, polygon_40
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click on all the red and green targets.

        Click to continue.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent feedback_text_2
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Your current points total is:
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    TextComponent feedback_text
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $points
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  Routine instructions_2
    TextComponent instructions_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ignore any other colours!

        If you click on these, you will need to repeat the trial.

        You need to complete 5 trials, and will have 20 seconds on each trial.
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine practice
    PolygonComponent polygon_41
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p1_x, p1_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_42
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p2_x, p2_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_43
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p3_x, p3_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_44
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p4_x, p4_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_45
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p5_x, p5_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_46
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p6_x, p6_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_47
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p7_x, p7_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_48
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p8_x, p8_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_49
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p9_x, p9_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_50
      fillColor = white
      nVertices = 7
      pos [set every repeat] = [p10_x, p10_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_51
      fillColor = white
      pos [set every repeat] = [p11_x, p11_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_52
      fillColor = white
      pos [set every repeat] = [p12_x, p12_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_53
      fillColor = white
      pos [set every repeat] = [p13_x, p13_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_54
      fillColor = white
      pos [set every repeat] = [p14_x, p14_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_55
      fillColor = white
      pos [set every repeat] = [p15_x, p15_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_56
      fillColor = white
      pos [set every repeat] = [p16_x, p16_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_57
      fillColor = white
      pos [set every repeat] = [p17_x, p17_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_58
      fillColor = white
      pos [set every repeat] = [p18_x, p18_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_59
      fillColor = white
      pos [set every repeat] = [p19_x, p19_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_60
      fillColor = white
      pos [set every repeat] = [p20_x, p20_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_61
      fillColor = white
      nVertices = 99
      pos [set every repeat] = [p21_x, p21_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    PolygonComponent polygon_62
      fillColor = white
      nVertices = 99
      pos [set every repeat] = [p22_x, p22_y]
      shape = regular polygon...
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      vertices = 99
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    MouseComponent mouse_practice
      clickable = polygon_41, polygon_42, polygon_43, polygon_44, polygon_45, polygon_46, polygon_47, polygon_48, polygon_49, polygon_50, polygon_51, polygon_52, polygon_53, polygon_54, polygon_55, polygon_56, polygon_57, polygon_58, polygon_59, polygon_60, polygon_61, polygon_62, polygon_63, polygon_64, polygon_65, polygon_66, polygon_67, polygon_68, polygon_69, polygon_70, polygon_71, polygon_72, polygon_73, polygon_74, polygon_75, polygon_76, polygon_77, polygon_78, polygon_79, polygon_80
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_3
      letterHeight = 0.1
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $points_practice
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        points_practice = 0
      Begin JS Experiment:
        points_practice = 0;

          randint = function(min,maxplusone){
              return Math.floor(Math.random()*(maxplusone - min)) + min;
              }

        beep = new sound.Sound({
            win: psychoJS.window,
            value: 'C',
            secs: 0.25,
            octave: 5
            });
        beep.setVolume(0.3);
      Begin JS Routine:
        stimuli = [polygon_41, polygon_42, polygon_43, polygon_44, polygon_45, polygon_46, polygon_47, polygon_48, polygon_49, polygon_50, polygon_51, polygon_52, polygon_53, polygon_54, polygon_55, polygon_56, polygon_57, polygon_58, polygon_59, polygon_60, polygon_61, polygon_62, polygon_63, polygon_64, polygon_65, polygon_66, polygon_67, polygon_68, polygon_69, polygon_70, polygon_71, polygon_72, polygon_73, polygon_74, polygon_75, polygon_76, polygon_77, polygon_78, polygon_79, polygon_80];

        current_x = 0;
        current_y = 0;
        x_jitter = 0;
        y_jitter = 0;
        new_x = 0;
        new_y = 0;
        thisOri = 0;

        for (var clicked_shape, _pj_c = 0, _pj_a = stimuli, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            clicked_shape = _pj_a[_pj_c];
            thisOri = util.randint(0, 360);
            clicked_shape.setOri(thisOri);
            current_x = clicked_shape.pos[0];
            current_y = clicked_shape.pos[1];
            x_jitter = randint((-25), 25);
            y_jitter = randint((- 60), 60);
            x_jitter = x_jitter/1000;
            y_jitter = y_jitter/1000;
            new_x = current_x + x_jitter;
            new_y = current_y + y_jitter;
            clicked_shape.setPos([new_x, new_y]);
        }
        bufferTime = 0.2;
        clickClock = new util.Clock();
        lastClickTime = 0;
      Begin Routine:
        stimuli = [polygon_41, polygon_42, polygon_43, polygon_44, polygon_45, polygon_46, polygon_47, polygon_48, polygon_49, polygon_50,
        polygon_51, polygon_52, polygon_53, polygon_54, polygon_55, polygon_56, polygon_57, polygon_58, polygon_59, polygon_60,
        polygon_61, polygon_62, polygon_63, polygon_64, polygon_65, polygon_66, polygon_67, polygon_68, polygon_69, polygon_70,
        polygon_71, polygon_72, polygon_73, polygon_74, polygon_75, polygon_76, polygon_77, polygon_78, polygon_79, polygon_80]

        for clicked_shape in stimuli:
            thisOri = randint(0,360)
            clicked_shape.setOri(thisOri)
            x_jitter = np.random.uniform(-0.02, 0.02)
            y_jitter = np.random.uniform(-0.05, 0.05)
            clicked_shape.pos += (x_jitter, y_jitter)


        bufferTime=.2
        clickClock=core.Clock()
        lastClickTime = 0
      Each Frame:
        for clicked_shape in stimuli:
            if mouse_practice.isPressedIn(clicked_shape) and beep.status != STARTED:
                thisClickTime = clickClock.getTime()
                if (thisClickTime - lastClickTime) > bufferTime:
                    if len(clicked_shape.vertices) == 3:
                        clicked_shape.color = 'grey'
                        points_practice = points_practice + 1
                        beep.play()
                    elif len(clicked_shape.vertices) == 4:
                        clicked_shape.color = 'grey'
                        points_practice = points_practice + 1
                        beep.play()
                    elif len(clicked_shape.vertices) == 99:
                        clicked_shape.color = 'grey'
                        points_practice = points_practice - 1

                lastClickTime = thisClickTime

            elif mouse_practice.isPressedIn(clicked_shape) and beep.status == STARTED:
                beep.stop()
      Each JS Frame:
        thisClickTime = 0;

        for (var clicked_shape, _pj_c = 0, _pj_a = stimuli, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            clicked_shape = _pj_a[_pj_c];
            if ((mouse_practice.isPressedIn(clicked_shape) && (beep.status !== PsychoJS.Status.STARTED))) {
                thisClickTime = clickClock.getTime();
                if (((thisClickTime - lastClickTime) > bufferTime)) {
                    if ((clicked_shape.vertices.length === 3)) {
                       clicked_shape.fillColor = new util.Color([0, 0, 0]);
                       clicked_shape.lineColor = new util.Color([0, 0, 0]);
                        points_practice = (points_practice + 1);
                        beep.play();
                    } else {
                        if ((clicked_shape.vertices.length === 4)) {
                            clicked_shape.fillColor = new util.Color([0, 0, 0]);
                            clicked_shape.lineColor = new util.Color([0, 0, 0]);
                            points_practice = (points_practice + 1);
                            beep.play();
                        } else {
                            if ((clicked_shape.vertices.length === 99)) {
                                clicked_shape.fillColor = new util.Color([0, 0, 0]);
                                clicked_shape.lineColor = new util.Color([0, 0, 0]);
                                points_practice = (points_practice - 1);
                            }
                        }
                    }
                }
                lastClickTime = thisClickTime;
            } else {
               if ((mouse_practice.isPressedIn(clicked_shape) && (beep.status === PsychoJS.Status.STARTED))) {
                    beep.stop();
                    }
                }
            }
      End JS Routine:
        psychoJS.eventManager.clearEvents();
        polygon_41.fillColor = new util.Color([1, 1, 1]);
        polygon_42.fillColor = new util.Color([1, 1, 1]);
        polygon_43.fillColor = new util.Color([1, 1, 1]);
        polygon_44.fillColor = new util.Color([1, 1, 1]);
        polygon_45.fillColor = new util.Color([1, 1, 1]);
        polygon_46.fillColor = new util.Color([1, 1, 1]);
        polygon_47.fillColor = new util.Color([1, 1, 1]);
        polygon_48.fillColor = new util.Color([1, 1, 1]);
        polygon_49.fillColor = new util.Color([1, 1, 1]);
        polygon_50.fillColor = new util.Color([1, 1, 1]);
        polygon_51.fillColor = new util.Color([1, 1, 1]);
        polygon_52.fillColor = new util.Color([1, 1, 1]);
        polygon_53.fillColor = new util.Color([1, 1, 1]);
        polygon_54.fillColor = new util.Color([1, 1, 1]);
        polygon_55.fillColor = new util.Color([1, 1, 1]);
        polygon_56.fillColor = new util.Color([1, 1, 1]);
        polygon_57.fillColor = new util.Color([1, 1, 1]);
        polygon_58.fillColor = new util.Color([1, 1, 1]);
        polygon_59.fillColor = new util.Color([1, 1, 1]);
        polygon_60.fillColor = new util.Color([1, 1, 1]);
        polygon_61.fillColor = new util.Color([1, 1, 1]);
        polygon_62.fillColor = new util.Color([1, 1, 1]);
        polygon_63.fillColor = new util.Color([1, 1, 1]);
        polygon_64.fillColor = new util.Color([1, 1, 1]);
        polygon_65.fillColor = new util.Color([1, 1, 1]);
        polygon_66.fillColor = new util.Color([1, 1, 1]);
        polygon_67.fillColor = new util.Color([1, 1, 1]);
        polygon_68.fillColor = new util.Color([1, 1, 1]);
        polygon_69.fillColor = new util.Color([1, 1, 1]);
        polygon_70.fillColor = new util.Color([1, 1, 1]);
        polygon_71.fillColor = new util.Color([1, 1, 1]);
        polygon_72.fillColor = new util.Color([1, 1, 1]);
        polygon_73.fillColor = new util.Color([1, 1, 1]);
        polygon_74.fillColor = new util.Color([1, 1, 1]);
        polygon_75.fillColor = new util.Color([1, 1, 1]);
        polygon_76.fillColor = new util.Color([1, 1, 1]);
        polygon_77.fillColor = new util.Color([1, 1, 1]);
        polygon_78.fillColor = new util.Color([1, 1, 1]);
        polygon_79.fillColor = new util.Color([1, 1, 1]);
        polygon_80.fillColor = new util.Color([1, 1, 1]);
      End Routine:
        event.clearEvents()

        polygon_41.color = [1, 1, 1]
        polygon_42.color = [1, 1, 1]
        polygon_43.color = [1, 1, 1]
        polygon_44.color = [1, 1, 1]
        polygon_45.color = [1, 1, 1]
        polygon_46.color = [1, 1, 1]
        polygon_47.color = [1, 1, 1]
        polygon_48.color = [1, 1, 1]
        polygon_49.color = [1, 1, 1]
        polygon_50.color = [1, 1, 1]
        polygon_51.color = [1, 1, 1]
        polygon_52.color = [1, 1, 1]
        polygon_53.color = [1, 1, 1]
        polygon_54.color = [1, 1, 1]
        polygon_55.color = [1, 1, 1]
        polygon_56.color = [1, 1, 1]
        polygon_57.color = [1, 1, 1]
        polygon_58.color = [1, 1, 1]
        polygon_59.color = [1, 1, 1]
        polygon_60.color = [1, 1, 1]
        polygon_61.color = [1, 1, 1]
        polygon_62.color = [1, 1, 1]
        polygon_63.color = [1, 1, 1]
        polygon_64.color = [1, 1, 1]
        polygon_65.color = [1, 1, 1]
        polygon_66.color = [1, 1, 1]
        polygon_67.color = [1, 1, 1]
        polygon_68.color = [1, 1, 1]
        polygon_69.color = [1, 1, 1]
        polygon_70.color = [1, 1, 1]
        polygon_71.color = [1, 1, 1]
        polygon_72.color = [1, 1, 1]
        polygon_73.color = [1, 1, 1]
        polygon_74.color = [1, 1, 1]
        polygon_75.color = [1, 1, 1]
        polygon_76.color = [1, 1, 1]
        polygon_77.color = [1, 1, 1]
        polygon_78.color = [1, 1, 1]
        polygon_79.color = [1, 1, 1]
        polygon_80.color = [1, 1, 1]
Flow
  Routine instructions
  Routine instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = final_target_positions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialNo': 1, 'p1_x': 0.1, 'p1_y': 0.4, 'p2_x': -0.3, 'p2_y': -0.2, 'p3_x': 0, 'p3_y': 0.2, 'p4_x': -0.4, 'p4_y': 0.2, 'p5_x': 0.3, 'p5_y': -0.4, 'p6_x': -0.2, 'p6_y': 0.4, 'p7_x': 0.1, 'p7_y': -0.2, 'p8_x': -0.4, 'p8_y': 0.4, 'p9_x': -0.4, 'p9_y': 0, 'p10_x': 0, 'p10_y': -0.4, 'p11_x': 0, 'p11_y': 0.4, 'p12_x': 0.3, 'p12_y': -0.2, 'p13_x': 0.2, 'p13_y': -0.2, 'p14_x': -0.2, 'p14_y': -0.2, 'p15_x': -0.1, 'p15_y': -0.4, 'p16_x': 0.3, 'p16_y': 0.4, 'p17_x': -0.3, 'p17_y': 0.2, 'p18_x': -0.2, 'p18_y': -0.4, 'p19_x': 0, 'p19_y': -0.2, 'p20_x': -0.4, 'p20_y': -0.4, 'p21_x': 0.2, 'p21_y': 0, 'p22_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,
      {'trialNo': 2, 'p1_x': 0.2, 'p1_y': 0, 'p2_x': 0, 'p2_y': 0, 'p3_x': -0.1, 'p3_y': 0, 'p4_x': 0.1, 'p4_y': 0, 'p5_x': -0.4, 'p5_y': -0.4, 'p6_x': -0.2, 'p6_y': 0.4, 'p7_x': 0.3, 'p7_y': -0.2, 'p8_x': -0.1, 'p8_y': -0.2, 'p9_x': 0.1, 'p9_y': -0.2, 'p10_x': 0.2, 'p10_y': 0.2, 'p11_x': -0.4, 'p11_y': 0, 'p12_x': -0.3, 'p12_y': 0.2, 'p13_x': 0.3, 'p13_y': 0, 'p14_x': 0.3, 'p14_y': -0.4, 'p15_x': 0.2, 'p15_y': -0.2, 'p16_x': 0.3, 'p16_y': 0.4, 'p17_x': 0, 'p17_y': -0.2, 'p18_x': -0.3, 'p18_y': -0.4, 'p19_x': 0, 'p19_y': -0.4, 'p20_x': -0.3, 'p20_y': 0.4, 'p21_x': 0.1, 'p21_y': 0.2, 'p22_x': -0.4, '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,
      {'trialNo': 3, 'p1_x': -0.1, 'p1_y': 0.2, 'p2_x': 0.3, 'p2_y': -0.4, 'p3_x': -0.1, 'p3_y': -0.4, 'p4_x': 0.2, 'p4_y': -0.4, 'p5_x': -0.3, 'p5_y': 0.4, 'p6_x': -0.2, 'p6_y': -0.4, 'p7_x': 0, 'p7_y': 0, 'p8_x': -0.3, 'p8_y': -0.4, 'p9_x': 0, 'p9_y': -0.2, 'p10_x': 0.3, 'p10_y': 0, 'p11_x': 0.2, 'p11_y': 0.4, 'p12_x': 0, 'p12_y': -0.4, 'p13_x': -0.4, 'p13_y': 0.2, 'p14_x': -0.1, 'p14_y': -0.2, 'p15_x': 0.1, 'p15_y': 0.4, 'p16_x': -0.4, 'p16_y': -0.2, 'p17_x': 0.1, 'p17_y': -0.2, 'p18_x': 0.1, 'p18_y': 0, 'p19_x': 0, 'p19_y': 0.4, 'p20_x': 0, 'p20_y': 0.2, 'p21_x': 0.3, 'p21_y': -0.2, 'p22_x': 0.2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,
      {'trialNo': 4, 'p1_x': -0.3, 'p1_y': 0.4, 'p2_x': -0.1, 'p2_y': -0.4, 'p3_x': -0.3, 'p3_y': -0.2, 'p4_x': -0.1, 'p4_y': -0.2, 'p5_x': -0.2, 'p5_y': 0.2, 'p6_x': 0.2, 'p6_y': 0, 'p7_x': -0.4, 'p7_y': 0.2, 'p8_x': -0.3, 'p8_y': -0.4, 'p9_x': 0.2, 'p9_y': -0.2, 'p10_x': 0, 'p10_y': -0.4, 'p11_x': 0.1, 'p11_y': 0, 'p12_x': 0.3, 'p12_y': -0.4, 'p13_x': 0.3, 'p13_y': 0.4, 'p14_x': 0.1, 'p14_y': -0.4, 'p15_x': -0.4, 'p15_y': -0.4, 'p16_x': -0.3, 'p16_y': 0, 'p17_x': 0.2, 'p17_y': -0.4, 'p18_x': -0.2, 'p18_y': -0.2, 'p19_x': 0.3, 'p19_y': 0, 'p20_x': -0.4, 'p20_y': 0.4, 'p21_x': -0.2, 'p21_y': 0.4, 'p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
    Routine trial
    Routine feedback
  LoopTerminator trials
